PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  expName = crowding
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Routines
  Routine trial
    CodeComponent definitions
      Code Type = Py
      Begin Experiment:
        trialsDesired = 5
      Begin Routine:
        windowWidthCm = 60
        windowWidthPx = 1920
        pxPerCm = windowWidthPx / windowWidthCm
        viewingDistanceCm = 50
        fixationXYPx = [0, 0]

        block = condition['block']

        orientation = condition['direction']
        newFont = condition['font']
        trialsDesired = condition['trialsDesired']

        eccentricityXDeg = condition['eccentricityXDeg']
        eccentricityYDeg = condition['eccentricityYDeg']
        eccentricityXYDeg = [eccentricityXDeg, eccentricityYDeg]
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent set_side
      Code Type = Py
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      Begin Routine:
        from random import choice

        # set random letter
        alphabet = ['D', 'H', 'K', 'O', 'N', 'R', 'S', 'V', 'Z']
        firstflanker = choice(alphabet)
        targetstim = choice(alphabet)
        secondflanker = choice(alphabet)
        correctAns = targetstim

        # Define shift per trial
        spacingDeg = 10**level - 0.15

        # Crowding changes per trial
        # radial
        if orientation == 'radial':
            if eccentricityXDeg < 0:
                pos1XYDeg = np.subtract(eccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = eccentricityXYDeg
                pos3XYDeg = np.add(eccentricityXYDeg, [spacingDeg, 0])
                levelLeft = level
            elif eccentricityXDeg > 0:
                pos1XYDeg = np.subtract(eccentricityXYDeg, [spacingDeg, 0])
                pos2XYDeg = eccentricityXYDeg
                pos3XYDeg = np.add(eccentricityXYDeg, [spacingDeg, 0])
                levelRight = level

        # tangential
        if orientation == 'tangential':
            if eccentricityXDeg < 0:
                pos1XYDeg = np.subtract(eccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = eccentricityXYDeg
                pos3XYDeg = np.add(eccentricityXYDeg, [0, spacingDeg])
                levelLeft = level
            elif eccentricityXDeg > 0:
                pos1XYDeg = np.subtract(eccentricityXYDeg, [0, spacingDeg])
                pos2XYDeg = eccentricityXYDeg
                pos3XYDeg = np.add(eccentricityXYDeg, [0, spacingDeg])
                levelRight = level

        # convert deg to pixels
        pos1XYPx = [0, 0]
        pos2XYPx = [0, 0]
        pos3XYPx = [0, 0]
        listXY = [0, 1]
        for i in listXY:
            pos1XYPx[i] = viewingDistanceCm*2 * \
                np.tan(0.5*pos1XYDeg[i]*np.pi/180)*pxPerCm + fixationXYPx[i]
            pos2XYPx[i] = viewingDistanceCm*2 * \
                np.tan(0.5*pos2XYDeg[i]*np.pi/180)*pxPerCm + fixationXYPx[i]
            pos3XYPx[i] = viewingDistanceCm*2 * \
                np.tan(0.5*pos3XYDeg[i]*np.pi/180)*pxPerCm + fixationXYPx[i]

        # Adjust height
        spacingPx = pos2XYPx[0] - pos1XYPx[0]
        spacingPxTangential = pos2XYPx[1] - pos1XYPx[1]
        if orientation == 'radial':
            heightPx = spacingPx/1.4
        if orientation == 'tangential':
            heightPx = spacingPxTangential/1.4
    CodeComponent end
      Code Type = Py
      End Experiment:
        print('log threshold right is: ', levelLeft)
        print('threshold spacing right is: ', 10**levelLeft - 0.15, ' deg')
        print('log threshold right is: ', levelRight)
        print('threshold spacing right is: ', 10**levelRight - 0.15, ' deg')
    KeyboardComponent key_resp
      allowedKeys = 'd','h','k','n','o','r','v','z','s'
      correctAns = $targetstim.lower()
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    GratingComponent fixation
      color = black
      mask = cross
      sf = none
      size = 30
      startVal [time (s)] = 0
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    TextComponent flanker1
      color = black
      font [set every repeat] = $newFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos1XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = durationS
      text [set every repeat] = $firstflanker
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    TextComponent target
      color = black
      font [set every repeat] = $newFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos2XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = durationS
      text [set every repeat] = $targetstim
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    TextComponent flanker2
      color = black
      font [set every repeat] = $newFont
      letterHeight [set every repeat] = heightPx
      pos [set every repeat] = pos3XYPx
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = durationS
      text [set every repeat] = $secondflanker
      units = pix
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  Routine filter
    CodeComponent begin
      Code Type = Py
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      Begin Experiment:
        thisLoopNumber = 0
        thisConditionsFile = './conditions/block_1.csv'
      Begin Routine:
        thisLoopNumber += 1
        thisConditionsFile = './conditions/block_{}.csv'.format(thisLoopNumber)

        print('=== New Block {} ==='.format(thisLoopNumber))
  Routine file
    CodeComponent preprocess
      Code Type = Py
      Before Experiment:
        # https://stackoverflow.com/a/58267676/11069914
        import pandas as pd

        if not os.path.exists('./conditions'):
            os.makedirs('./conditions')

        csv_data = pd.read_csv('stairDefinitions.csv')

        dataBlockRange = csv_data['block'].unique()
        dataBlockRange = dataBlockRange.tolist()

        for i, value in enumerate(dataBlockRange):
            csv_data[csv_data['block'] == value].to_csv('./conditions/block_' + str(value) + '.csv', index = False)

        blockCount = len(dataBlockRange)
Flow
  Routine file
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = blockCount
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    Routine filter
    LoopInitiator trials loopType="MultiStairHandler"
      conditionsFile = $thisConditionsFile
      loopType = interleaved staircases
      nReps = trialsDesired
      stairType = QUEST
      switchMethod = fullRandom
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
